<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:p1="clr-namespace:AindDynamicForagingDataSchema;assembly=Extensions"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.WhiteRabbit;assembly=AllenNeuralDynamics.WhiteRabbit"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.AindManipulator;assembly=AllenNeuralDynamics.AindManipulator"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:cv="clr-namespace:Bonsai.Vision;assembly=Bonsai.Vision"
                 xmlns:p4="clr-namespace:OpenCV.Net;assembly=OpenCV.Net"
                 xmlns:p5="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:spk="clr-namespace:Bonsai.Spinnaker;assembly=Bonsai.Spinnaker"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TaskLogicPath" />
        <Property Name="RigPath" />
        <Property Name="SessionPath" />
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:ReadSchemas.bonsai">
        <TaskLogicPath>C:\git\AllenNeuralDynamics\aind-vr-foraging\local\AindDynamicForagingTaskLogic.json</TaskLogicPath>
        <RigPath>C:\git\AllenNeuralDynamics\aind-vr-foraging\local\AindDynamicForagingRig.json</RigPath>
        <SessionPath>C:\git\AllenNeuralDynamics\aind-vr-foraging\local\AindBehaviorSessionModel.json</SessionPath>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>LoadSchemas</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawSessionSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindBehaviorSessionModel" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>SubjectSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawRigSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingRig" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>RigSchema</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RawTaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="p1:DeserializeFromJson">
              <p1:Type xsi:type="TypeMapping" TypeArguments="p1:AindDynamicForagingTaskLogic" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicSchema</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TaskParameters</Selector>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TaskLogicParameters</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Annotation">
        <Name />
        <Text><![CDATA[]]></Text>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Hardware</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="GroupWorkflow">
              <Name>HarpDevices</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpClockGenerator.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpWhiteRabbit.bonsai">
                    <PortName>COMx</PortName>
                    <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpWhiteRabbitEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType xsi:nil="true" />
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p2:Parse">
                    <harp:Register xsi:type="p2:TimestampedCounter" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>HarpTimestampSource</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpBehavior.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpBehavior.bonsai">
                    <PortName>COMx</PortName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpSoundCard.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpSoundCard.bonsai">
                    <PortName>COMx</PortName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpLickometerRight.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpLicketySplitRight.bonsai">
                    <PortName>COMx</PortName>
                    <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Manipulator.Calibration.Input</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="p1:SerializeToJson">
                      <p1:Formatting>None</p1:Formatting>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="p3:DeserializeFromJson">
                    <p3:Type xsi:type="TypeMapping" TypeArguments="p3:AindManipulatorCalibrationInput" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Manipulator.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\AindManipulator.bonsai">
                    <PortName>COMx</PortName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpLickometerLeft.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="Extensions\HarpLicketySplitLeft.bonsai">
                    <PortName>COMx</PortName>
                    <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpSniffDetector.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpSniffDetector.bonsai">
                    <PortName>COMx</PortName>
                    <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpSniffDetector</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpEnvironmentSensor.PortName</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="PortName" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.HarpUtils:HarpEnvironmentSensor.bonsai">
                    <PortName>COMx</PortName>
                    <TriggerHarpReadDumpSubjectName>TriggerHarpReadDump</TriggerHarpReadDumpSubjectName>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>HarpSniffDetector</Selector>
                  </Expression>
                  <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:FilterNotNull.bonsai" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="28" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source2" />
                  <Edge From="29" To="30" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="32" Label="Source1" />
                  <Edge From="33" To="34" Label="Source1" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="36" Label="Source1" />
                  <Edge From="36" To="40" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source2" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                  <Edge From="44" To="48" Label="Source1" />
                  <Edge From="45" To="46" Label="Source1" />
                  <Edge From="46" To="47" Label="Source1" />
                  <Edge From="47" To="48" Label="Source2" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Name>Cameras</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>RigSchema</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>TriggeredCameraController</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>FrameRate.Value</Selector>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>CameraFrameRate</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CameraFrameRate</Name>
                  </Expression>
                  <Expression xsi:type="beh:Format">
                    <harp:MessageType>Write</harp:MessageType>
                    <harp:Register xsi:type="beh:Camera0Frequency" />
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>HarpBehaviorCommands</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpBehaviorEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Event</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="beh:Parse">
                    <harp:Register xsi:type="beh:TimestampedCamera0Frame" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Value</Selector>
                  </Expression>
                  <Expression xsi:type="BitwiseAnd">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="beh:FrameAcquired">
                      <Value>FrameAcquired</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="GreaterThan">
                    <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Byte">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Seconds</Selector>
                  </Expression>
                  <Expression xsi:type="rx:PublishSubject">
                    <Name>FrameEvent</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Cameras</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:CreateObservable">
                    <Name>InstantiateCamera</Name>
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="rx:AsyncSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="BooleanProperty">
                            <Value>true</Value>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="MulticastSubject">
                          <Name>TriggeredCamerasInitialized</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Take">
                            <rx:Count>1</rx:Count>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="SerialNumber" Selector="SerialNumber" />
                            <Property Name="ExposureTime" Selector="Exposure" />
                            <Property Name="Gain" Selector="Gain" />
                            <Property Name="Binning" Selector="Binning" />
                            <Property Name="ColorProcessing" Selector="ColorProcessing" />
                            <Property Name="Gamma" Selector="Gamma" />
                            <Property Name="PixelFormat" Selector="PixelFormat" />
                            <Property Name="AdcBitDepth" Selector="AdcBitDepth" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Value</Selector>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>RegionOfInterest</Selector>
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="Value" Selector="X,Y,Width,Height" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="PropertySource" TypeArguments="cv:Crop,p4:Rect">
                          <MemberName>RegionOfInterest</MemberName>
                          <Value>
                            <X>0</X>
                            <Y>0</Y>
                            <Width>0</Width>
                            <Height>0</Height>
                          </Value>
                        </Expression>
                        <Expression xsi:type="PropertyMapping">
                          <PropertyMappings>
                            <Property Name="RegionOfInterest" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="p5:AindSpinnakerCapture">
                            <spk:Index xsi:nil="true" />
                            <spk:ColorProcessing>Default</spk:ColorProcessing>
                            <p5:ExposureTime>19000</p5:ExposureTime>
                            <p5:Gain>0</p5:Gain>
                            <p5:Binning>1</p5:Binning>
                            <p5:Gamma xsi:nil="true" />
                            <p5:PixelFormat>Mono8</p5:PixelFormat>
                            <p5:RegionOfInterest>
                              <p5:X>0</p5:X>
                              <p5:Y>0</p5:Y>
                              <p5:Width>0</p5:Width>
                              <p5:Height>0</p5:Height>
                            </p5:RegionOfInterest>
                            <p5:AdcBitDepth xsi:nil="true" />
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>FrameEvent</Name>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="harp:CreateTimestamped" />
                        </Expression>
                        <Expression xsi:type="SubscribeSubject">
                          <Name>ThisCamera</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Key</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:WithLatestFrom" />
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="5" Label="Source1" />
                        <Edge From="5" To="15" Label="Source1" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="15" Label="Source2" />
                        <Edge From="9" To="10" Label="Source1" />
                        <Edge From="10" To="11" Label="Source1" />
                        <Edge From="11" To="12" Label="Source1" />
                        <Edge From="12" To="13" Label="Source1" />
                        <Edge From="13" To="14" Label="Source1" />
                        <Edge From="14" To="15" Label="Source3" />
                        <Edge From="15" To="17" Label="Source1" />
                        <Edge From="16" To="17" Label="Source2" />
                        <Edge From="17" To="18" Label="Source1" />
                        <Edge From="18" To="21" Label="Source1" />
                        <Edge From="19" To="20" Label="Source1" />
                        <Edge From="20" To="21" Label="Source2" />
                        <Edge From="21" To="22" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Annotation">
                    <Name>SpinnakerApiNote</Name>
                    <Text><![CDATA[For some reason, if you try to access the spinnaker API back to back, a threading error is emitted]]></Text>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Timer">
                      <rx:DueTime>PT0S</rx:DueTime>
                      <rx:Period>PT0.1S</rx:Period>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:GroupBy">
                    <rx:KeySelector>Item2</rx:KeySelector>
                    <rx:ElementSelector>Item1</rx:ElementSelector>
                  </Expression>
                  <Expression xsi:type="rx:ReplaySubject">
                    <Name>TriggeredCamerasStream</Name>
                    <rx:BufferSize xsi:nil="true" />
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Boolean">
                    <rx:Name>TriggeredCamerasInitialized</rx:Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>1</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="IntProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Merge" />
                  </Expression>
                  <Expression xsi:type="rx:Accumulate" />
                  <Expression xsi:type="SubscribeSubject">
                    <Name>TriggeredCameraController</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Cameras</Selector>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Count</Selector>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="GreaterThanOrEqual">
                    <Operand xsi:type="IntProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="rx:Condition">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Delay">
                      <rx:DueTime>PT0.1S</rx:DueTime>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>TriggeredCamerasReady</Name>
                  </Expression>
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="11" To="16" Label="Source2" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source1" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source1" />
                  <Edge From="22" To="25" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source2" />
                  <Edge From="25" To="26" Label="Source1" />
                  <Edge From="26" To="27" Label="Source1" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                  <Edge From="30" To="31" Label="Source1" />
                  <Edge From="31" To="34" Label="Source1" />
                  <Edge From="32" To="33" Label="Source1" />
                  <Edge From="33" To="34" Label="Source2" />
                  <Edge From="34" To="35" Label="Source1" />
                  <Edge From="35" To="40" Label="Source1" />
                  <Edge From="36" To="37" Label="Source1" />
                  <Edge From="37" To="38" Label="Source1" />
                  <Edge From="38" To="39" Label="Source1" />
                  <Edge From="39" To="40" Label="Source2" />
                  <Edge From="40" To="41" Label="Source1" />
                  <Edge From="41" To="42" Label="Source1" />
                  <Edge From="42" To="43" Label="Source1" />
                  <Edge From="43" To="44" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
          </Nodes>
          <Edges />
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Unit" />
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>TriggerHarpReadDump</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>